<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DeviceCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedAnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>